CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop your input files below, then click Apply filters to the file list.']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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "png") (file does contain "MaxIP")

Metadata:[module_num:2|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notes:['Extract the sample name, omitting the number and extension. Click Update here and confirm that the correct name is saved.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Labels>.*)_[0-9]{3}-MaxIP.nd2$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Click Update here to verify that the images are correctly detected.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['No need to do anything here.']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the channels. We assume that the 1st channel is PLA and the 2nd is DAPI.']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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:PLA
    Channel number:2
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    Image name:DAPI

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify nuclei in the DAPI channel.', 'Changed diameter from 220 to 300 ']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify PLA spots as objects.  This is one of 2 ways to find the spots. Feel free to use the method that is more accurate for your images.']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
    Select the input image:PLA
    Name the primary objects to be identified:PLA_Objects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:15
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:PLA
    Select objects to measure:Nuclei

FindMaxima:[module_num:9|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notes:['Identify PLA spots as local maxima (peaks of intensity). This tends to perform better in lower-intensity areas. Feel free to use whichever method that is more accurate for your images.']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enabled:False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
    Select the input image:PLA
    Name the output image:PLA_Maxima
    Minimum distance between maxima:3
    Method for excluding background:Threshold
    Specify the minimum intensity of a peak:0.00
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Convert the local maxima into objects.']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enabled:False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
    Select the input image:PLA_Maxima
    Name the primary objects to be identified:PLA_Maxima_Objects
    Typical diameter of objects, in pixel units (Min,Max):1,2
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
RelateObjects:[module_num:11|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notes:['Associate PLA spots (primary object method) with nuclei. We are counting only the spots in or touching the edge of the nuclei. ']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
    Parent objects:Nuclei
    Child objects:PLA_Objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:12|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notes:['Associate PLA spots (local maxima method) with nuclei. We are counting only the spots in or touching the edge of the nuclei.']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enabled:False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
    Parent objects:Nuclei
    Child objects:PLA_Maxima_Objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:13|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notes:['Export data to spreadsheets.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
GrayToColor:[module_num:14|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notes:['Create an overlay image to show the detected nuclei and PLA spots. The Maxima are shown in green.']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:PLA
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    Select the image to be colored blue:DAPI
    Name the output image:RGB_orig
    Relative weight for the red image:2
    Relative weight for the green image:2
    Relative weight for the blue image:0.5
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
OverlayOutlines:[module_num:15|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notes:['Add the outlines of the detected nuclei and PLA primary objects.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RGB_orig
    Name the output image:OverlayObj
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:Nuclei
    Select outline color:#FB02FF
    Select objects to display:PLA_Objects

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OverlayObj
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:bold

SaveImages:[module_num:17|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notes:['Save the overlay image. Use this image to evaluate the accuracy of detection.']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
